20201202_123749 Admin
Worktable link
Administrator
--{ RES }--
V;200
--{ CFG }--
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16,0;P040 96-Well F-Bottom;96-well F-bottom plate
16,1;P040 96-Well DWP;96-well DWP
16,2;P040 384-Well F-Bottom;384-well F-bottom
26,0;1/4/8-Well Omnitray with Lid;AgarPlateForPicking
26,1;Pos Camera;Camera
37,0;Trough 1500ml Stainless;MediaThrough1500ml
40,0;Trough 100ml;Hypochlorite solution
40,1;Trough 100ml;100ml Media Through 1
40,2;Trough 100ml;100ml Media Through 2
41,0;Wash Station Cleaner shallow;Cleaner Shallow Clean
41,1;Wash Station Waste;Waste Clean
41,2;Wash Station Cleaner deep;Cleaner Deep Clean
42,0;Wash Station Cleaner shallow;Cleaner Shallow Dirty
42,1;Wash Station Waste;Waste Dirty
42,2;Wash Station Cleaner deep;Cleaner Deep Dirty
1;System
1;Incubator1
2;Incubator2
4;Incubator4
1;IncubatorAll
1;IncubatorAll B
50;Kuhner Shaker ES-X  2x4x2Pos
50;Kuhner Shaker ES-X  Training
6;Infinite 200
1;Infinite 200 Multiplate
45;RoboSeal
45;RoboSeal Training
44;Te-Shake 1Pos Front
44;Te-Shake 1Pos Front Training
43;Symbol954
43;Symbol954 Training
25;Hotel 3x4Pos Grid25to39
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--{ RPG }--
Variable(bool_DocumentPickedColoniesFinished,"NO",0,"",0,1.000000,10.000000,1,2,0,0);
Comment("Document picked colonies in Excel sheet");
Group("Write picking datetime");
EXECUTE_VBSCRIPT("Z:\VisualBasicScripts\GetDateTime.vbs",0);
Variable(VBScript_SetExcelSheetMultipleCellValueString_FileNamePath,"~ExcelCopyFilePath~",0,"How many strains do you have?",0,1.000000,3.000000,1,2,0,0);
Variable(VBScript_SetExcelSheetMultipleCellValueString_Row,"1+int_AlreadyFilledWellsTotal+1",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(VBScript_SetExcelSheetMultipleCellValueString_Column,"8",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(VBScript_SetExcelSheetMultipleCellValueString_NoRows,"int_ColoniesToPickThisRound",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(VBScript_SetExcelSheetMultipleCellValueString_NoColumns,"1",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(VBScript_SetExcelSheetMultipleCellValueString_String,"~VBScript_DateTime~",0,"How many strains do you have?",0,1.000000,3.000000,1,2,0,0);
Variable(VBScript_SetExcelSheetMultipleCellValueString_SheetName,"PickedColonies",0,"How many strains do you have?",0,1.000000,3.000000,1,2,0,0);
EXECUTE_VBSCRIPT("Z:\VisualBasicScripts\SetExcelSheetMultipleCellValueString.vbs",0);
GroupEnd();
Group("Write agar plate barcode");
Variable(VBScript_SetExcelSheetMultipleCellValueString_Column,"3",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(VBScript_SetExcelSheetMultipleCellValueString_String,"~str_BarcodeCurrentAgarPlate~",0,"How many strains do you have?",0,1.000000,3.000000,1,2,0,0);
EXECUTE_VBSCRIPT("Z:\VisualBasicScripts\SetExcelSheetMultipleCellValueString.vbs",0);
GroupEnd();
Group("Write agar plate well number");
Variable(VBScript_SetExcelSheetMultipleCellValueNumber_FileNamePath,"~ExcelCopyFilePath~",0,"How many strains do you have?",0,1.000000,3.000000,1,2,0,0);
Variable(VBScript_SetExcelSheetMultipleCellValueNumber_Row,"1+int_AlreadyFilledWellsTotal+1",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(VBScript_SetExcelSheetMultipleCellValueNumber_Column,"10",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(VBScript_SetExcelSheetMultipleCellValueNumber_NoRows,"int_ColoniesToPickThisRound",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(VBScript_SetExcelSheetMultipleCellValueNumber_NoColumns,"1",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(VBScript_SetExcelSheetMultipleCellValueNumber_Number,"~LOOP_AllWells~",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(VBScript_SetExcelSheetMultipleCellValueNumber_SheetName,"PickedColonies",0,"How many strains do you have?",0,1.000000,3.000000,1,2,0,0);
EXECUTE_VBSCRIPT("Z:\VisualBasicScripts\SetExcelSheetMultipleCellValueNumber.vbs",0);
GroupEnd();
Group("Write destination plate barcode");
Variable(VBScript_SetExcelSheetMultipleCellValueString_Column,"5",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(VBScript_SetExcelSheetMultipleCellValueString_String,"~str_BarcodeCurrentDestinationPlate~",0,"How many strains do you have?",0,1.000000,3.000000,1,2,0,0);
EXECUTE_VBSCRIPT("Z:\VisualBasicScripts\SetExcelSheetMultipleCellValueString.vbs",0);
GroupEnd();
Group("Write clone number to excel sheet using loop");
BeginLoop("int_ColoniesToPickThisRound","ExcelWriteLoop");
Group("Write clone number");
Variable(VBScript_SetExcelSheetCellValueString_FileNamePath,"~ExcelCopyFilePath~",0,"How many strains do you have?",0,1.000000,3.000000,1,2,0,0);
Variable(VBScript_SetExcelSheetCellValueString_Row,"1+int_AlreadyFilledWellsTotal+~LOOP_ExcelWriteLoop~",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(VBScript_SetExcelSheetCellValueString_Column,"7",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(VBScript_SetExcelSheetCellValueString_String,"Clone ~int_AlreadyPickedColoniesThisWell+LOOP_ExcelWriteLOOP~",0,"How many strains do you have?",0,1.000000,3.000000,1,2,0,0);
Variable(VBScript_SetExcelSheetCellValueString_SheetName,"PickedColonies",0,"How many strains do you have?",0,1.000000,3.000000,1,2,0,0);
EXECUTE_VBSCRIPT("Z:\VisualBasicScripts\SetExcelSheetCellValueString.vbs",0);
GroupEnd();
EndLoop();
GroupEnd();
Comment("Finished documenting picked colonies in excel sheet");
Variable(bool_DocumentPickedColoniesFinished,"YES",0,"",0,1.000000,10.000000,1,2,0,0);
